PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -0.6863, -0.6863
  expName = test_eyetracker
  eyetracker = Tobii Technology
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
  tbModel = Tobii Pro Spark
  tbSampleRate = 60
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 30
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    MovieComponent video
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      movie = Downloads/eye_tracker/test`/output.mp4
      size = (1.77777777778, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        event.clearEvents()
        win.mouseVisible = False
      Begin Routine:
        win.mouseVisible = False

        slider_data=[]
        slider_times=[]

        mouseRec=mouse.getPos()

        frame_n = 0
        skip_steps = 3
      Each Frame:
        win.mouseVisible = False

        #print(slider.markerPos)
        #if frame_n % skip_steps == 0:
        sliderDiff = mouse.getPos()[slider_orientation] - mouseRec[slider_orientation]
        #slider.markerPos += sliderDiff
        #slidingSteps = sliderDiff * sliding_factor / slider_granularity
        #print(sliderDiff, sliderDiff * sliding_factor, slidingSteps)
        #slider.markerPos += slidingSteps * slider_granularity
        if sliderDiff > 0.001:
            slider.markerPos += slider_granularity
        elif sliderDiff < -0.001:
            slider.markerPos -= slider_granularity
        #print(sliderDiff, slider.markerPos)

        if slider.markerPos:
            slider_data.append(slider.markerPos)
            slider_times.append(t)

        mouseRec = mouse.getPos()

        #frame_n += 1
      End Experiment:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = True
        thisExp.addData('slider.responsesVal', slider_data)
        thisExp.addData('slider.responsesT', slider_times)
        print('slider.responsesVal')
        print('slider.responsesVal', slider_data)
        print('slider.responsesT', slider_times)
    SliderComponent slider
      forceEndRoutine = False
      granularity = slider_granularity
      initVal = slider_start
      labels = slider_labels
      letterHeight = 0.05
      ori = slider_orientation
      pos = (0, -0.4)
      size = (slider_width, slider_height)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = scrollbar
      ticks = slider_ticks
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = space key
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = 0.9216, 0.9216, 0.7255
    units = from exp settings
  Routine start
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment is about to start.

        Left-click with your mouse to start.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    EyetrackerRecordComponent etRecord_2
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent slider_setup
      Code Type = Auto->JS
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      Begin Experiment:
        slider_width=.8
        slider_height=.05
        slider_orientation=0
        slider_granularity=.05
        nTicks = int(1 / slider_granularity) + 1
        #Failing to set ticks or labels in code
        slider_ticks=[
              slider_granularity*i for i in range(nTicks)
            ]
        slider_labels='0', '1'
        #slider_labels="Strongly Disagree,Disagree,Neither Agree nor Disagree,Agree,Strongly Agree"
        #slider_labels=['Strongly Disagree','Disagree','Neither Agree nor Disagree','Agree','Strongly Agree']

        marker_colour='blue'
        marker_size=.1
        slider_start = 0.5
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = True
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine end
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    EyetrackerRecordComponent etRecord
      actionType = Stop Only
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment is finished.

        Thank you.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  EyetrackerValidationRoutine validation
  Routine start
  Routine trial
  Routine end
